WorkflowBuilder(Version=2.8.2)
BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriverCommands => #0
ExternalizedMapping(OperationMode, OperationLed, DumpRegisters, VisualIndicators, Heartbeat, IgnoreErrors, PortName) => #1
#0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=false, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COMx)
-> PublishSubject StepperDriverEvents

BehaviorSubject<AllenNeuralDynamics.AindManipulator.ManipulatorPosition> GoToPosition
-> InputMapping(Motor0(Selector=X), Motor1(Selector=Y1), Motor2(Selector=Y2), Motor3(Selector=Z))
-> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMoveAbsolutePayload(Motor0=0, Motor1=0, Motor2=0, Motor3=0))
-> MulticastSubject StepperDriverCommands

BehaviorSubject<AllenNeuralDynamics.AindManipulator.ManipulatorPosition> MoveRelativePosition
-> InputMapping(Motor0(Selector=X), Motor1(Selector=Y1), Motor2(Selector=Y2), Motor3(Selector=Z))
-> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMoveRelativePayload(Motor0=0, Motor1=0, Motor2=0, Motor3=0))
-> MulticastSubject StepperDriverCommands

BehaviorSubject<System.Reactive.Unit> StopMotors
-> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateStopMotorsPayload(StopMotors="Motor0 Motor1 Motor2 Motor3"))
-> MulticastSubject StepperDriverCommands

WorkflowInput<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput> Source1
-> Defer Manipulator
    WorkflowInput Source1
    -> AsyncSubject Settings

    SubscribeSubject Settings
    -> MemberSelector(Selector=AxisConfiguration)
    -> Merge
    -> ToDictionary(KeySelector=Axis)
    -> AsyncSubject AxesConfiguration

    GroupWorkflow OperationControl
        SubscribeSubject StepperDriverEvents
        -> Take(Count=1)
        -> SelectMany DeviceConfig
            SubscribeSubject StepperDriverEvents
            -> Take(Count=1)
            -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open))
            -> MulticastSubject StepperDriverCommands
            -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2 Input3"))
            -> MulticastSubject StepperDriverCommands
            -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate10Hz))
            -> MulticastSubject StepperDriverCommands
            -> WorkflowOutput
        -> SelectMany ConfigureAll
            SubscribeSubject Settings
            -> MemberSelector(Selector=AxisConfiguration)
            -> Merge
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Axis)
                -> InputMapping(Value(Selector=value__))
                -> IntProperty(Value=3)
                -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
                -> WorkflowOutput
            -> CreateObservable ConfigureSingle
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Motor

                SubscribeSubject Motor => #3
                SubscribeSubject Motor
                -> PropertyMapping => #5
                  MicrostepResolution(Selector=MicrostepResolution)
                  StepInterval(Selector=StepInterval)
                  StepIntervalAcceleration(Selector=StepAccelerationInterval)
                  OperationMode(Selector=MotorOperationMode)
                  MaximumStepInterval(Selector=MaximumStepInterval)
                  Motor(Selector=Axis)
                #3, #5 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.AindManipulator:ConfigureMotor.bonsai
                  Motor=Motor3
                  MicrostepResolution=Microstep8
                  StepInterval=100
                  StepIntervalAcceleration=100
                  OperationMode=QuietMode
                  MaximumStepInterval=100
                -> WorkflowOutput
            -> Concat
            -> LastOrDefault
            -> WorkflowOutput
        -> LastOrDefault
        -> SelectMany "Enable/Disable Motors"
            ByteProperty(Value=0)
            -> Take(Count=1) => #1
            SubscribeSubject Settings
            -> MemberSelector(Selector=AxisConfiguration)
            -> Merge
            -> MemberSelector(Selector=Axis) => #5
            ByteProperty(Value=1)
            -> Take(Count=1)
            -> PropertyMapping(Value) => #8
            #5, #8 -> Subtract(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=X)) => #9
            -> ByteProperty(Value=1) => #10
            #10, #9 -> Zip
            -> InputMapping(Selector=Item1, Value(Selector=Item2))
            -> LeftShift(Value=2) => #13
            #1, #13 -> Merge
            -> Sum
            -> Last => #16
            -> Harp.StepperDriver.Format(MessageType=Write, Register=Harp.StepperDriver.EnableDriver) => #17
            #16 -> BitwiseNot
            -> Harp.StepperDriver.Format(MessageType=Write, Register=Harp.StepperDriver.DisableDriver) => #19
            #17, #19 -> Merge
            -> MulticastSubject StepperDriverCommands
            -> Last
            -> WorkflowOutput
        -> Take(Count=1)
        -> BehaviorSubject IsConfigured

        BooleanProperty(Value=false)
        -> Take(Count=1) => #9
        PublishSubject<System.Reactive.Unit> Home
        -> BooleanProperty(Value=true)
        -> MulticastSubject Homing
        -> Take(Count=1)
        -> SelectMany HomeAll
            SubscribeSubject Settings
            -> MemberSelector(Selector=HomingOrder)
            -> Merge => #2
            SubscribeSubject AxesConfiguration => #3
            #2, #3 -> WithLatestFrom
            -> Condition
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ContainsKey
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform IndexAxis
              Expression: it.Item2[it.Item1]
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Axis.value__)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> CreateObservable HomeSingle
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Motor

                SubscribeSubject Motor => #3
                SubscribeSubject Motor
                -> PropertyMapping(MinLimit(Selector=MinLimit), MaxLimit(Selector=MaxLimit)) => #5
                SubscribeSubject Motor
                -> MemberSelector(Selector=Axis) => #7
                ByteProperty(Value=1)
                -> Take(Count=1)
                -> PropertyMapping(Value) => #10
                #7, #10 -> Subtract(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=X)) => #11
                -> ByteProperty(Value=1) => #12
                #12, #11 -> Zip
                -> InputMapping(Selector=Item1, Value(Selector=Item2))
                -> LeftShift(Value=2)
                -> PropertyMapping(Motor) => #16
                #3, #5, #16 -> IncludeWorkflow(Path=AllenNeuralDynamics.AindManipulator:HomeAxis.bonsai, Motor=None, MinLimit=1, MaxLimit=22000)
                -> WorkflowOutput
            -> Concat
            -> LastOrDefault
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> Repeat => #15
        #9, #15 -> Merge
        -> BehaviorSubject IsHomed
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject Homing
        -> SelectMany GoToInitialPosition
            SubscribeSubject Settings
            -> MemberSelector(Selector=InitialPosition)
            -> MulticastSubject GoToPosition
            -> WorkflowOutput

        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> BehaviorSubject Homing

        BehaviorSubject<System.Reactive.Unit> StopMotors
        -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateStopMotorsPayload(StopMotors="Motor0 Motor1 Motor2 Motor3"))
        -> MulticastSubject StepperDriverCommands

        SubscribeSubject StepperDriverEvents
        -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.AccumulatedSteps)
        -> InputMapping(X(Selector=Motor0), Y1(Selector=Motor1), Y2(Selector=Motor2), Z(Selector=Motor3))
        -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0)
        -> BehaviorSubject ManipulatorPosition => #32
        -> Skip(Count=1) => #33
        #33, #32 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (Item1.X==Item2.X) and (Item1.Y1==Item2.Y1) and (Item1.Y2==Item2.Y2) and (Item1.Z==Item2.Z)
        -> BitwiseNot
        -> BehaviorSubject IsMoving

    GroupWorkflow AindManipulatorGUI
        Bonsai.Gui.ButtonBuilder Stop(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 48pt, style=Bold, Underline", Text=STOP!)
        -> Sink StopMotors
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject StopMotors
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #2
        GroupWorkflow OffsetPositionUI
            Bonsai.Gui.PropertyGridBuilder ManipulatorOffsetProperty(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 22pt", HelpVisible=false, ToolbarVisible=true, AutoRefresh=false)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #1
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y2))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder -X(Enabled=false, Visible=true, Text=-X)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=-1, Y1=0, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveRelativePosition
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #6
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y2))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder +X(Enabled=false, Visible=true, Text=+X)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=1, Y1=0, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveRelativePosition
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #11
            #6, #11 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #13
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder -Y1(Enabled=true, Visible=true, Text=-Y1)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=-1, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveRelativePosition
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #18
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder +Y1(Enabled=true, Visible=true, Text=+Y1)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=1, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveRelativePosition
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #23
            #18, #23 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #25
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder -Y2(Enabled=false, Visible=true, Text=-Y2)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=-1, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveRelativePosition
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #30
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder +Y2(Enabled=false, Visible=true, Text=+Y2)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=1, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveRelativePosition
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #35
            #30, #35 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #37
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Z))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder -Z(Enabled=false, Visible=true, Text=-Z)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=-1) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveRelativePosition
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #42
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Z))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder +Z(Enabled=false, Visible=true, Text=+Z)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=1) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveRelativePosition
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #47
            #42, #47 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #49
            #13, #25, #37, #49 -> Bonsai.Gui.TableLayoutPanelBuilder ManipulatorOffsetButton(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 36pt", ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #51
            SubscribeSubject IsHomed
            -> PropertyMapping(Enabled) => #53
            #1, #51, #53 -> Bonsai.Gui.TableLayoutPanelBuilder ManipulatorOffset
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=2
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.3), RowStyle(SizeType=Percent, Height=0.7))
              CellSpans=""
            -> WorkflowOutput

            ExternalizedMapping(Value(DisplayName=X))
            -> IntProperty(Value=1000) => #57
            ExternalizedMapping(Value(DisplayName=Y1))
            -> IntProperty(Value=1000) => #59
            ExternalizedMapping(Value(DisplayName=Y2))
            -> IntProperty(Value=1000) => #61
            ExternalizedMapping(Value(DisplayName=Z))
            -> IntProperty(Value=1000) => #63
            #57, #59, #61, #63 -> CombineLatest
            -> InputMapping(X(Selector=Item1), Y1(Selector=Item2), Y2(Selector=Item3), Z(Selector=Item4))
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=1000, Y1=1000, Y2=1000, Z=1000)
            -> BehaviorSubject OffsetGain
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #4
        GroupWorkflow PositionControl
            SubscribeSubject Homing
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it ? "Homing..." : "Home"
            -> PropertyMapping(Name) => #2
            SubscribeSubject Homing
            -> BitwiseNot
            -> PropertyMapping(Enabled) => #5
            #2, #5 -> Bonsai.Gui.ButtonBuilder Home(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 36pt", Text=Home)
            -> Sink Home
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject Home
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #8
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> BooleanProperty(Value=true)
            -> Condition
                SubscribeSubject IsMoving
                -> WorkflowOutput
            -> PropertyMapping(AutoRefresh) => #12
            SubscribeSubject IsMoving
            -> BitwiseNot
            -> PropertyMapping(Enabled) => #15
            #12, #15 -> Bonsai.Gui.PropertyGridBuilder CurrentPosition(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 22pt", HelpVisible=false, ToolbarVisible=true, AutoRefresh=true)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #17
            SubscribeSubject IsHomed
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder SetPosition(Enabled=false, Visible=true, Font="Microsoft Sans Serif, 36pt", Text="Set position")
            -> BehaviorSubject SetPosition
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #22
            SubscribeSubject IsMoving
            -> Bonsai.Scripting.Expressions.ExpressionTransform GenerateLabel
              Expression: it ? "Moving..." : "Idle"
            -> PropertyMapping(Text)
            -> Bonsai.Gui.ButtonBuilder IsMoving(Enabled=false, Visible=true, Font="Microsoft Sans Serif, 36pt", Text=Idle)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #27
            #8, #17, #22, #27 -> Bonsai.Gui.TableLayoutPanelBuilder PositionControl(Enabled=true, Visible=true, ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput

            SubscribeSubject SetPosition => #30
            ExternalizedMapping(X(Category=SetPosition), Y1(Category=SetPosition), Y2(Category=SetPosition), Z(Category=SetPosition)) => #31
            SubscribeSubject ManipulatorPosition
            -> DistinctUntilChanged
            -> PropertyMapping(X(Selector=X), Y1(Selector=Y1), Y2(Selector=Y2), Z(Selector=Z)) => #34
            #30, #31, #34 -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0)
            -> MulticastSubject GoToPosition
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #6
        #2, #4, #6 -> Bonsai.Gui.TableLayoutPanelBuilder ManipulatorInterface
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.2), RowStyle(SizeType=Percent, Height=0.8))
          CellSpans(CellSpan(ColumnSpan=2, RowSpan=1))
        -> WorkflowOutput
    -> WorkflowOutput
-> WorkflowOutput
