<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Motor" />
        <Property Name="MinLimit" />
        <Property Name="MaxLimit" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>HomeAxis</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Motor" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="p1:CreateEnableDriverPayload,p1:StepperMotors">
              <MemberName>EnableDriver</MemberName>
              <Value>None</Value>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>MotorMask</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>ThisCommands</rx:Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriverCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MotorMask</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>DisableLimit</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateMotor0MaxPositionPayload">
                      <p1:Motor0MaxPosition>0</p1:Motor0MaxPosition>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ThisCommandsOffset</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateMotor0MinPositionPayload">
                      <p1:Motor0MinPosition>0</p1:Motor0MinPosition>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ThisCommandsOffset</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>IsHome?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT0.1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>10</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Read</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateDigitalInputStatePayload">
                      <p1:DigitalInputState>None</p1:DigitalInputState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ThisCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepperDriverEvents</Name>
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:DigitalInputState" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MotorMask</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:DigitalInputStates">
                      <Value>Input0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="11" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Name>IsNotHome</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsHome</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>MoveOutsideTrigger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Motor0MoveRelative" />
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateMotor0MoveRelativePayload">
                      <p1:Motor0MoveRelative>1000</p1:Motor0MoveRelative>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ThisCommandsOffset</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepperDriverEvents</Name>
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:DigitalInputState" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MotorMask</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:DigitalInputStates">
                      <Value>Input0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateStopMotorsPayload">
                      <p1:StopMotors>Motor0</p1:StopMotors>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ThisCommandsMask</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="12" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor0MoveRelativePayload">
                <p1:Motor0MoveRelative>-1000000</p1:Motor0MoveRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ThisCommandsOffset</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>WaitForStop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepperDriverEvents</Name>
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:MotorStopped" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>State</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MotorMask</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:StepperMotors">
                      <Value>None</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepperDriverEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Exclude</harp:FilterType>
                      <harp:MessageType>Read</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Read</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateMotorStoppedPayload">
                      <p1:State>None</p1:State>
                      <p1:Changed>None</p1:Changed>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ThisCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>EnableLimits</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Limits</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Motor0MaxPosition" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateMotor0MaxPositionPayload">
                      <p1:Motor0MaxPosition>22000</p1:Motor0MaxPosition>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ThisCommandsOffset</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Limits</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Motor0MinPosition" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateMotor0MinPositionPayload">
                      <p1:Motor0MinPosition>1</p1:Motor0MinPosition>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ThisCommandsOffset</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="10" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMortor0AccumulatedStepsPayload">
                <p1:Mortor0AccumulatedSteps>0</p1:Mortor0AccumulatedSteps>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ThisCommandsOffset</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MinLimit" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MaxLimit" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>22000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Limits</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>ThisCommandsOffset</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MotorMask</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Motor" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.AindManipulator:OffsetMotorRegister.bonsai">
              <Motor>Motor0</Motor>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriverCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>ThisCommandsMask</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MotorMask</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Motor" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.AindManipulator:ModifyMaskMotorRegister.bonsai">
              <Motor>Motor0</Motor>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriverCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="27" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="33" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="35" To="38" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="39" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>