<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SubjectName" />
        <Property Name="LogName" />
        <Property Name="EncodingFrameRate" />
        <Property Name="VideoExtension" />
        <Property Name="MetadataExtension" />
        <Property Name="Codec" />
        <Property Name="Modality" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai">
        <SubjectName>LoggingRootPath</SubjectName>
        <Modality>BehaviorVideos</Modality>
        <LogName>Camera</LogName>
        <EncodingFrameRate>60</EncodingFrameRate>
        <VideoExtension>avi</VideoExtension>
        <MetadataExtension>csv</MetadataExtension>
        <Codec>FMP4</Codec>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>ThisLogger</Name>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ThisLogger</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ThisLogger</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" Selector="Video" />
          <Property Name="FrameRate" Selector="Logger.EncodingFrameRate" />
          <Property Name="FourCC" Selector="Logger.Codec" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="7" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>