<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>ScaledTexturedModel</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings>
                <gl:BufferBinding xsi:type="gl:TextureBinding">
                  <gl:Name>textureDiffuse</gl:Name>
                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                  <gl:TextureTarget>Texture2D</gl:TextureTarget>
                </gl:BufferBinding>
              </gl:BufferBindings>
              <gl:FramebufferAttachments />
              <gl:VertexShader>BonVision:Shaders.TexturedModel.vert</gl:VertexShader>
              <gl:FragmentShader>AllenNeuralDynamics.Core:Shaders\ScaledTexturedModel.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>DisplayColorAdjustments</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings>
                <gl:BufferBinding xsi:type="gl:TextureBinding">
                  <gl:Name>tex</gl:Name>
                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                  <gl:TextureTarget>Texture2D</gl:TextureTarget>
                </gl:BufferBinding>
              </gl:BufferBindings>
              <gl:FramebufferAttachments />
              <gl:VertexShader>BonVision:Shaders.Quad.vert</gl:VertexShader>
              <gl:FragmentShader>AllenNeuralDynamics.Core:Shaders\DisplayColorAdjustments.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>