<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.EnvironmentSensor;assembly=AllenNeuralDynamics.EnvironmentSensor"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>HarpEnvironmentSensorCommands</rx:Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>Off</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>Off</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpEnvironmentSensorEvents</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TriggerHarpReadDumpSubjectName" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerHarpReadDump</Name>
      </Expression>
      <Expression xsi:type="harp:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="harp:CreateOperationControlPayload">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:MuteReplies>false</harp:MuteReplies>
          <harp:VisualIndicators>Off</harp:VisualIndicators>
          <harp:OperationLed>Off</harp:OperationLed>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpEnvironmentSensorCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>